<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">C:/Users/Beta/Data/</directory>
  
  <!-- The setup name -->
  <setup_name type="string">scope2-hcam</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">classic</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <class_name type="string">HalController</class_name>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">ramp_sat.ctbl</colortable>
	
      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
	<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
	<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
	<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

	<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
	<obj1 desc="Objective 1" type="custom">60x,0.108,0.0,0.0</obj1>
	<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
	<time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  
    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..
	
	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
    -->
    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
	<master type="boolean">True</master>
     
	<class_name type="string">HamamatsuCameraControl</class_name>
	<module_name type="string">storm_control.hal4000.camera.hamamatsuCameraControl</module_name>
    
    <!--
	<class_name type="string">PhotometricsCameraControl</class_name>
	<module_name type="string">storm_control.hal4000.camera.photometricsCameraControl</module_name>
    -->
	<parameters>
    <!-- pam cam only pars
     <pvcam_sdk type="string">C:\Windows\System32\pvcam64.dll</pvcam_sdk>
     <camera_name type="string">PMUSBCam00</camera_name>
      --> 
      
	  <!-- ham cam only pars --> 
	  <camera_id type="int">0</camera_id>


	  <!-- These are the display defaults, not the camera range. -->
	  <default_max type="int">2000</default_max> 
	  <default_min type="int">100</default_min>
	  <flip_horizontal type="boolean">False</flip_horizontal>
	  <flip_vertical type="boolean">False</flip_vertical>
	  <transpose type="boolean">False</transpose>

	  <!-- These can be changed / editted. -->

	  <!-- This is the extension to use (if any) when saving data from this camera. -->
	  <extension type="string"></extension>
	  
	  <!-- Whether or not data from this camera is saved during filming. -->
	  <saved type="boolean">True</saved>

	</parameters>
      </camera>
    </camera1>


    <!-- DAQ control -->
    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>
      <configuration>
        <!-- This is the default timing source to use while filming. "Oversampled"
             films will use the counter for timing. The counter is driven by the
             camera fire pin. Other films will just use the camera fire pin directly.
        -->
            <!-- PCIe-6353 is Dev1 on Scope2 -->
        <timing>
          <camera_fire_pin type="string">/Dev1/PFI8</camera_fire_pin>  <!-- We get this trigger number from the PFI associated with CTR 0 SRC on the NI datasheet (PFI8) --> 
          <counter type="string">/Dev1/ctr0</counter>  <!-- This is the CTR number associated with the pin that camera fire out (red cable) is attached to -->
          <counter_out type="string">/Dev1/PFI12</counter_out> <!-- The reference sheet show CTR 0 OUT (counter 0 out) is pin 2 (not used) PFI 12 -->
        </timing>

        <!-- These are the things that we provide DAQ functionality for.
             Other modules will request them with a 'get functionality'
             message and "name" = "daq.xxx.yyy". -->
             
        <!-- used for widefield: 
            750 = /Dev1/ao0  /Dev1/port0/line0
            647 = /Dev1/ao1  /Dev1/port0/line1
            561 = /Dev1/ao3 /Dev1/port0/line2
            488 = /Dev1/port0/line9
            405 = /Dev1/port0/line8
            
            647  /Dev1/port0/line10   C1 J49.  D GND 13
            560  /Dev1/port0/line10  C1 J47  D GND 15
        -->           
        <ilm647>
         <do_task>
            <source type="string">/Dev1/port0/line11</source>
          </do_task>  
        </ilm647>

        <ilm561>
          <do_task>
            <source type="string">/Dev1/port0/line10</source>   
          </do_task>
        </ilm561>

        <ilm488>
          <do_task>
            <source type="string">/Dev1/port0/line9</source>  
          </do_task>
        </ilm488>
        
        <ilm405>
          <do_task>
            <source type="string">/Dev1/port0/line8</source> 
          </do_task>
        </ilm405>
        
        <ir_laser>
          <ct_task>
            <source type="string">/Dev1/ctr1</source>  <!--  IR laser was on counter 1 in the Hal2 version of scope 2.  See IR-laser wiring notes -->
            <frequency type="float">50000</frequency>
          </ct_task>
        </ir_laser>

        <mcl>
          <ao_task>
            <source type="string">/Dev1/ao2</source>  <!-- The BNC in to the piezo-z. Ludl piezo number ## -->
          </ao_task>
        </mcl>
      </configuration>
    </daq>


    <!-- Focus lock control GUI. -->
    <focuslock validate="True">
      <class_name type="string">FocusLock</class_name>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <configuration>
	<ir_laser type="string">ldc_irlaser</ir_laser>  <!-- none_irlaser -->
	<ir_power type="int">10</ir_power>
	<lock_modes type="string">NoLockMode,AlwaysOnLockMode,HardwareZScanLockMode,ZScanLockMode</lock_modes>
	<qpd type="string">uc480_camera</qpd>
	<z_stage type="string">mcl_zstage</z_stage>
    <hardware_z_scan validate = "True">  <!-- added for hardware_z_scan-->
    <z_offsets type="string">-5:5:.3:2</z_offsets>
    </hardware_z_scan>
	<parameters>
	  <find_sum>
	    <step_size type="float">1.0</step_size>
	  </find_sum>
	  <locked>
	    <buffer_length type="int">5</buffer_length>
	    <offset_threshold type="float">500.0</offset_threshold>  <!-- hbiac1 = 20, STORM5 = 500 -->
	  </locked>
	  <jump_size type="float">0.1</jump_size>
	</parameters>
      </configuration>
    </focuslock>


    <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>

        <!-- Note: The name of the channel is the gui_name.
             XML tags cannot start with numbers. -->
        <ch1>
          <gui_name type="string">647</gui_name>
          <color type="string">255,0,0</color>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm647.do_task</hw_fn_name>
          </digital_modulation>
        </ch1>

        <ch2>
          <gui_name type="string">561</gui_name>
          <color type="string">255,255,0</color>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm561.do_task</hw_fn_name>
          </digital_modulation>
        </ch2>
        
        <ch3>
          <gui_name type="string">488</gui_name>
          <color type="string">0,0,255</color>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm488.do_task</hw_fn_name>
          </digital_modulation>
        </ch3>
        
        <!-- 
          <amplitude_modulation>
            <hw_fn_name>obis488</hw_fn_name>  
          </amplitude_modulation>
          -->
        
        <ch5>
          <gui_name type="string">405</gui_name>
          <color type="string">255,0,255</color> 
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm405.do_task</hw_fn_name>
          </digital_modulation>
        </ch5>
        
      </configuration>
    </illumination>

    <!-- Thorlabs LDC control for IR laser -->
    <ldc_irlaser>
      <module_name type="string">storm_control.sc_hardware.thorlabs.LDCModule</module_name>
      <class_name type="string">LDCIRLaserModule</class_name>
      <configuration>
        <ct_fn_name type="string">daq.ir_laser.ct_task</ct_fn_name>
      </configuration>
    </ldc_irlaser>

    <!-- Ludl stage -->
    <ludl_stage>
      <module_name type="string">storm_control.sc_hardware.ludl.ludlModule</module_name>
      <class_name type="string">LudlStageRS232</class_name>    
      <configuration>	
        <com_port type="string">COM4</com_port>  <!-- LUDL STAGE COM PORT -->
      </configuration>
    </ludl_stage>
    
    <!-- Mad City Labs Z piezo -->
    <mcl_zstage>
      <module_name type="string">storm_control.sc_hardware.madCityLabs.mclVoltageZModule</module_name>
      <class_name type="string">MCLVoltageZ</class_name>
      <configuration>
        <parameters>
           <!-- Updated to reflect storm5hcam, ludl peizo -->
          <center type="float">200.0</center>  <!-- original: 50 -->
          <has_center_bar type="boolean">True</has_center_bar>
          <maximum type="float">350.0</maximum>  <!-- original: 1000 -->
          <minimum type="float">0.0</minimum>
          <warning_high type="float">330.0</warning_high>
          <warning_low type="float">20.0</warning_low>
        </parameters>
        <ao_fn_name type="string">daq.mcl.ao_task</ao_fn_name>
        <microns_to_volts type="float">0.029</microns_to_volts>  <!-- original: 1000 -->
      </configuration>
    </mcl_zstage>

    <!-- Coherent 
        Obis 405 - COM11,  
        Obis 488 - COM5
        Obis controller - Com10
    -->
    <obisController>
      <module_name type="string">storm_control.sc_hardware.coherent.coherentModule</module_name>
      <class_name type="string">CoherentObis</class_name>
      <configuration>
        <port type="string">COM11</port>    <!-- 405 COM PORT -->
        <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </obisController>


    <!-- sCMOS calibration module -->
	 <!-- great, just need to figure out how to use this now -->
    <scmos_cal>
      <module_name type="string">storm_control.hal4000.miscControl.scmosCalibration</module_name>
      <class_name type="string">SCMOSCalibration</class_name>
    </scmos_cal>


    <!-- Stage control GUI -->
    <stage>
      <class_name type="string">Stage</class_name>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>
      <configuration>
	<stage_functionality type="string">ludl_stage</stage_functionality>
      </configuration>
    </stage>

    <!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>	    
      <configuration>
	<parallel_mode type="boolean">True</parallel_mode>
	<tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>
    
    <!-- Thorlabs UC480 camera for the focus lock -->
    <uc480_camera>
      <class_name type="string">UC480Camera</class_name>
      <module_name type="string">storm_control.sc_hardware.thorlabs.uc480CameraModule</module_name>
      <configuration>
        <parameters>
          <offset_has_center_bar type="boolean">True</offset_has_center_bar>
          <offset_maximum type="float">1.0</offset_maximum>
          <offset_minimum type="float">-1.0</offset_minimum>
          <offset_warning_high type="float">0.8</offset_warning_high>
          <offset_warning_low type="float">-0.8</offset_warning_low>
          <sum_maximum type="float">100000.0</sum_maximum>
          <sum_minimum type="float">50.0</sum_minimum>
          <sum_warning_low type="float">10000.0</sum_warning_low>
        </parameters>
        <background type="int">100000</background>
        <camera_id type="int">1</camera_id>
        <ini_file type="string">uc480_settings.ini</ini_file>
        <offset_file type="string">C:/Users/Beta/MicroscopeSoftware/settings-files/cam_offsets_scope2.txt</offset_file>
        <pixel_clock type="int">25</pixel_clock> <!-- 25 -->
        <sigma type="float">3.5</sigma>  <!-- storm5 uses 7-->
        <uc480_dll type="string">c:/windows/system32/uc480_64.dll</uc480_dll>
        <use_storm_analysis type="boolean">False</use_storm_analysis>
        <x_width type="int">500</x_width>
        <y_width type="int">100</y_width>
        <units_to_microns type="float">-0.007</units_to_microns>  <!-- hbaic uses 0.264   storm5 uses 0.007-->
      </configuration>
    </uc480_camera>
    
    
     <!-- W1 spinning disk. COM8 -->
    <spinning_disk>
      <module_name type="string">storm_control.sc_hardware.andor.w1SpinDiskModule1Wheel</module_name>
      <class_name type="string">W1SpinDiskModule</class_name>
      <configuration>
		<baudrate type="int">115200</baudrate>
		<port type="string">COM8</port>
        <filter_wheel_1 type="string">1:em450/50,2:em525/50,3:em605/50,4:et700/75m,5:blocked,6:blocked,7:blocked,8:blocked,9:blocked,10:quad</filter_wheel_1>
	    <dichroic_mirror type = "string">1:QuadBand,2:empty,3:empty</dichroic_mirror>
      </configuration>
    </spinning_disk>


  </modules>  
</config>
